{
  "analysis_tasks": [
    {
      "task": "StitchedInitialize",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedInitialize",
      "parameters": {
        "configuration": {
          "profile": "0718_40x_150z",
          "codebook_index": 0,
          "metadata_dir": "/absolute/path/frozen_metadata",
          "raw_root": "/absolute/path/raw_sample",
          "review_decision": "/absolute/path/alignment_decision.json",
          "mask_archive": "/absolute/path/mask_archive"
        },
        "memory_mb": 8192,
        "minutes": 30
      }
    },
    {
      "task": "StitchedFragments",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedExtract",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "extract",
        "dependencies": [
          "StitchedInitialize"
        ],
        "memory_mb": 16384,
        "minutes": 60
      }
    },
    {
      "task": "StitchedFragments",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedWithin",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "within",
        "dependencies": [
          "StitchedExtract"
        ],
        "memory_mb": 32768,
        "minutes": 480
      }
    },
    {
      "task": "StitchedFragments",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedPool",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "pool",
        "dependencies": [
          "StitchedWithin"
        ],
        "memory_mb": 16384,
        "minutes": 240
      }
    },
    {
      "task": "StitchedFragments",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedCross",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "cross",
        "dependencies": [
          "StitchedPool"
        ],
        "memory_mb": 32768,
        "minutes": 240
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedQAWindows",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "qa_windows",
        "dependencies": [
          "StitchedCross"
        ],
        "memory_mb": 8192,
        "minutes": 30
      }
    },
    {
      "task": "StitchedFragments",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedQA",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "qa",
        "dependencies": [
          "StitchedQAWindows"
        ],
        "memory_mb": 8192,
        "minutes": 60
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedReview",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "registration_review",
        "dependencies": [
          "StitchedQA"
        ],
        "memory_mb": 8192,
        "minutes": 60
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedCalibrationPlan",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "calibration_plan",
        "dependencies": [
          "StitchedReview"
        ],
        "memory_mb": 16384,
        "minutes": 120
      }
    },
    {
      "task": "StitchedFragments",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedCalibrationImages",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "calibration_images",
        "dependencies": [
          "StitchedCalibrationPlan"
        ],
        "memory_mb": 16384,
        "minutes": 120
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedCalibrationFinalize",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "calibration_finalize",
        "dependencies": [
          "StitchedCalibrationImages"
        ],
        "memory_mb": 8192,
        "minutes": 120
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedOptimize",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "optimize",
        "dependencies": [
          "StitchedCalibrationFinalize"
        ],
        "memory_mb": 65536,
        "minutes": 1440
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedDecodePlan",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "decode_plan",
        "dependencies": [
          "StitchedOptimize"
        ],
        "memory_mb": 16384,
        "minutes": 120
      }
    },
    {
      "task": "StitchedFragments",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedDecode",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "decode",
        "dependencies": [
          "StitchedDecodePlan"
        ],
        "memory_mb": 24576,
        "minutes": 2880,
        "workers": 52
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedRawFinalize",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "raw_finalize",
        "dependencies": [
          "StitchedDecode"
        ],
        "memory_mb": 16384,
        "minutes": 360
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedAdaptiveFilter",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "adaptive_filter",
        "dependencies": [
          "StitchedRawFinalize"
        ],
        "memory_mb": 24576,
        "minutes": 1440
      }
    },
    {
      "task": "StitchedFragments",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedDeduplicate",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "deduplicate",
        "dependencies": [
          "StitchedAdaptiveFilter"
        ],
        "memory_mb": 16384,
        "minutes": 360
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedExport",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "export",
        "dependencies": [
          "StitchedDeduplicate"
        ],
        "memory_mb": 16384,
        "minutes": 720
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedQuality",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "quality",
        "dependencies": [
          "StitchedExport"
        ],
        "memory_mb": 8192,
        "minutes": 120
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedPartitionSetup",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "partition_setup",
        "dependencies": [
          "StitchedExport"
        ],
        "memory_mb": 16384,
        "minutes": 120
      }
    },
    {
      "task": "StitchedFragments",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedPartitionGeometry",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "partition_geometry",
        "dependencies": [
          "StitchedPartitionSetup"
        ],
        "memory_mb": 16384,
        "minutes": 240
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedPartitionCoordinates",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "partition_coordinates",
        "dependencies": [
          "StitchedPartitionSetup"
        ],
        "memory_mb": 16384,
        "minutes": 240
      }
    },
    {
      "task": "StitchedFragments",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedPartitionJoin",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "partition_join",
        "dependencies": [
          "StitchedPartitionGeometry",
          "StitchedPartitionCoordinates"
        ],
        "memory_mb": 16384,
        "minutes": 240
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedPartitionExport",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "partition_export",
        "dependencies": [
          "StitchedPartitionJoin"
        ],
        "memory_mb": 32768,
        "minutes": 360
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedPartitionVerify",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "partition_verify",
        "dependencies": [
          "StitchedPartitionExport"
        ],
        "memory_mb": 32768,
        "minutes": 240
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedCellCenters",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "cell_centers",
        "dependencies": [
          "StitchedPartitionVerify"
        ],
        "memory_mb": 8192,
        "minutes": 120
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedAnalysis",
      "parameters": {
        "initialize_task": "StitchedInitialize",
        "stage": "analysis_report",
        "dependencies": [
          "StitchedCellCenters"
        ],
        "memory_mb": 32768,
        "minutes": 240
      }
    }
  ]
}