{
  "analysis_tasks": [
    {
      "task": "StitchedInitialize",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2Initialize",
      "parameters": {
        "configuration": {
          "profile": "0718_40x_150z",
          "codebook_index": 1,
          "metadata_dir": "/absolute/path/frozen_metadata",
          "raw_root": "/absolute/path/raw_sample",
          "review_decision": "/absolute/path/alignment_decision.json",
          "mask_archive": "/absolute/path/ulip3D"
        },
        "memory_mb": 8192,
        "minutes": 30
      }
    },
    {
      "task": "StitchedFragments",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2Extract",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "extract",
        "dependencies": [
          "StitchedU2Initialize"
        ],
        "memory_mb": 16384,
        "minutes": 60
      }
    },
    {
      "task": "StitchedFragments",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2Within",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "within",
        "dependencies": [
          "StitchedU2Extract"
        ],
        "memory_mb": 32768,
        "minutes": 480
      }
    },
    {
      "task": "StitchedFragments",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2Pool",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "pool",
        "dependencies": [
          "StitchedU2Within"
        ],
        "memory_mb": 16384,
        "minutes": 240
      }
    },
    {
      "task": "StitchedFragments",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2Cross",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "cross",
        "dependencies": [
          "StitchedU2Pool"
        ],
        "memory_mb": 32768,
        "minutes": 240
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2QAWindows",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "qa_windows",
        "dependencies": [
          "StitchedU2Cross"
        ],
        "memory_mb": 8192,
        "minutes": 30
      }
    },
    {
      "task": "StitchedFragments",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2QA",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "qa",
        "dependencies": [
          "StitchedU2QAWindows"
        ],
        "memory_mb": 8192,
        "minutes": 60
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2Review",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "registration_review",
        "dependencies": [
          "StitchedU2QA"
        ],
        "memory_mb": 8192,
        "minutes": 60
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2CalibrationPlan",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "calibration_plan",
        "dependencies": [
          "StitchedU2Review"
        ],
        "memory_mb": 16384,
        "minutes": 120
      }
    },
    {
      "task": "StitchedFragments",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2CalibrationImages",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "calibration_images",
        "dependencies": [
          "StitchedU2CalibrationPlan"
        ],
        "memory_mb": 16384,
        "minutes": 120
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2CalibrationFinalize",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "calibration_finalize",
        "dependencies": [
          "StitchedU2CalibrationImages"
        ],
        "memory_mb": 8192,
        "minutes": 120
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2Optimize",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "optimize",
        "dependencies": [
          "StitchedU2CalibrationFinalize"
        ],
        "memory_mb": 65536,
        "minutes": 1440
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2DecodePlan",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "decode_plan",
        "dependencies": [
          "StitchedU2Optimize"
        ],
        "memory_mb": 16384,
        "minutes": 120
      }
    },
    {
      "task": "StitchedFragments",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2Decode",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "decode",
        "dependencies": [
          "StitchedU2DecodePlan"
        ],
        "memory_mb": 24576,
        "minutes": 2880,
        "workers": 52
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2RawFinalize",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "raw_finalize",
        "dependencies": [
          "StitchedU2Decode"
        ],
        "memory_mb": 16384,
        "minutes": 360
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2AdaptiveFilter",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "adaptive_filter",
        "dependencies": [
          "StitchedU2RawFinalize"
        ],
        "memory_mb": 24576,
        "minutes": 1440
      }
    },
    {
      "task": "StitchedFragments",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2Deduplicate",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "deduplicate",
        "dependencies": [
          "StitchedU2AdaptiveFilter"
        ],
        "memory_mb": 16384,
        "minutes": 360
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2Export",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "export",
        "dependencies": [
          "StitchedU2Deduplicate"
        ],
        "memory_mb": 16384,
        "minutes": 720
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2Quality",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "quality",
        "dependencies": [
          "StitchedU2Export"
        ],
        "memory_mb": 8192,
        "minutes": 120
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2PartitionSetup",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "partition_setup",
        "dependencies": [
          "StitchedU2Export"
        ],
        "memory_mb": 16384,
        "minutes": 120
      }
    },
    {
      "task": "StitchedFragments",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2PartitionGeometry",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "partition_geometry",
        "dependencies": [
          "StitchedU2PartitionSetup"
        ],
        "memory_mb": 16384,
        "minutes": 240
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2PartitionCoordinates",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "partition_coordinates",
        "dependencies": [
          "StitchedU2PartitionSetup"
        ],
        "memory_mb": 16384,
        "minutes": 240
      }
    },
    {
      "task": "StitchedFragments",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2PartitionJoin",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "partition_join",
        "dependencies": [
          "StitchedU2PartitionGeometry",
          "StitchedU2PartitionCoordinates"
        ],
        "memory_mb": 16384,
        "minutes": 240
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2PartitionExport",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "partition_export",
        "dependencies": [
          "StitchedU2PartitionJoin"
        ],
        "memory_mb": 32768,
        "minutes": 360
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2PartitionVerify",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "partition_verify",
        "dependencies": [
          "StitchedU2PartitionExport"
        ],
        "memory_mb": 32768,
        "minutes": 240
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2CellCenters",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "cell_centers",
        "dependencies": [
          "StitchedU2PartitionVerify"
        ],
        "memory_mb": 8192,
        "minutes": 120
      }
    },
    {
      "task": "StitchedStage",
      "module": "merlin.analysis.stitched",
      "analysis_name": "StitchedU2Analysis",
      "parameters": {
        "initialize_task": "StitchedU2Initialize",
        "stage": "analysis_report",
        "dependencies": [
          "StitchedU2CellCenters"
        ],
        "memory_mb": 32768,
        "minutes": 240
      }
    }
  ]
}